PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = demo
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Routines
  Routine trial
    MouseComponent mouse
      clickable = o1,o2,o3
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code
      Code Type = Py
      End Routine:
        if mouse.isPressedIn(o1):
            gray1_posi = (0,0)
            gray2_posi = (0.25,0)
        if mouse.isPressedIn(o2):
            gray1_posi = (-0.25,0)
            gray2_posi = (0.25,0)
        if mouse.isPressedIn(o3):
            gray1_posi = (-0.25,0)
            gray2_posi = (0,0)
    ImageComponent o1
      image = o1.PNG
      pos = (-0.25, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent o2
      image = o2.PNG
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent o3
      image = o3.PNG
      pos = (0.25,0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine trial_cross
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial_chosen
    PolygonComponent Left_2
      fillColor = $[1,1,1]
      pos = (-0.25, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent Mid_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent Right_2
      fillColor = $[1,1,1]
      pos = (0.25, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent o1_2
      image = o1.PNG
      pos = (-0.25, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent o2_2
      image = o2.PNG
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent o3_2
      image = o3.PNG
      pos = (0.25, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent gray1
      image = gray.png
      opacity = 0.8
      pos [set every repeat] = gray1_posi
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent gray2
      image = gray.png
      opacity = 0.8
      pos [set every repeat] = gray2_posi
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine trial_cross
    Routine trial
    Routine trial_chosen
  LoopTerminator trials
