PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1600, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = test2017_7_spatial
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine answer
    CodeComponent code
      Each Frame:
        #b = mouse.getPressed()
        #if b[0] == 1:
        #    xp = mouse.getPos()[0]
        #    yp = mouse.getPos()[1]
        #if xposi[0]-0.1 < any(np.array(mouse.x)) < xposi[0]+0.1:# and any(mouse.y) == yposi[0]:
        #    op1 = 1

        if mouse.isPressedIn(pos1):
            op1 = 1
            test[0] = 1
        if mouse.isPressedIn(pos2):
            op2 = 1
            test[1] = 2
        if mouse.isPressedIn(pos3):
            op3 = 1
            test[2] = 3
        if mouse.isPressedIn(pos4):
            op4 = 1
            test[3] = 4
        if mouse.isPressedIn(pos5):
            op5 = 1
            test[4] = 5
        if mouse.isPressedIn(pos6):
            op6 = 1
            test[5] = 6
        if mouse.isPressedIn(pos7):
            op7 = 1
            test[6] = 7
        if mouse.isPressedIn(pos8):
            op8 = 1
            test[7] = 8
        if mouse.isPressedIn(pos9):
            op9 = 1
            test[8] = 9
        if mouse.isPressedIn(pos10):
            op10 = 1
            test[9] = 10
        if mouse.isPressedIn(pos11):
            op11 = 1
            test[10] = 11
        if mouse.isPressedIn(pos12):
            op12 = 1
            test[11] = 12
        if mouse.isPressedIn(pos13):
            op13 = 1
            test[12] = 13
        if mouse.isPressedIn(pos14):
            op14 = 1
            test[13] = 14
        if mouse.isPressedIn(pos15):
            op15 = 1
            test[14] = 15
        if mouse.isPressedIn(pos16):
            op16 = 1
            test[15] = 16
      Begin Routine:
        if trials_3.thisRepN > 1:
            dur = dur + (trials_3.thisRepN-1)
      End Routine:
        #xp,indx = np.unique(mouse.x,return_index=True)
        #yp,indy = np.unique(mouse.y,return_index=True)
        #xp = np.array(mouse.x)[np.sort(indx)]
        #yp = np.array(mouse.y)[np.sort(indy)]
        #testx1 = xposi[seq[0:m]]-0.1 < xp[0:m]
        #testx2 = xp[0:m]< xposi[seq[0:m]]+0.1
        #testy1 = yposi[seq[0:m]]-0.1 < yp[0:m]
        #testy2 = yp[0:m]< yposi[seq[0:m]]+0.1
        #if all(testx1) and all(testx2) and all(testy1) and all(testy2):
        #    correct = 1
        seq = seq + 1
        if all(np.sort(seq[0:m])[::-1] == np.sort(test)[::-1][0:m]):
            correct[trials_2.thisN] = 1
        else:
            correct[trials_2.thisN] = 0
        seq = seq-1
        point = np.sort(test)[::-1][0:m]
        trials.addData('x_axis',xposi[seq[0:m]])
        trials.addData('y_axis',yposi[seq[0:m]])
        trials.addData('point',point)
        trials.addData('order',seq[0:m]+1)
        trials.addData('correct',correct)

        m = 0
        op1 = 0
        op2 = 0
        op3 = 0
        op4 = 0
        op5 = 0
        op6 = 0
        op7 = 0
        op8 = 0
        op9 = 0
        op10 = 0
        op11 = 0
        op12 = 0
        op13 = 0
        op14 = 0
        op15 = 0
        op16 = 0
        #xp = 0
        #yp = 0
        #indx = 0
        #indy = 0
        #correct = np.zeros(2)
        point = 0
        test = np.zeros(16)
        dur = 3
        np.random.shuffle(seq)
    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [duration (s)] = $dur
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = on click
    PolygonComponent ans_line1
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos [set every repeat] = [xaxis[0], 0]
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent ans_line2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xaxis[1], 0]
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent ans_line3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xaxis[2], 0]
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent ans_line4
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xaxis[3], 0]
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent ans_line5
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xaxis[4], 0]
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent ans_line6
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [-0.5, yaxis[0]]
      ori = 90
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent ans_line7
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [-0.5, yaxis[1]]
      ori = 90
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent ans_line8
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [-0.5, yaxis[2]]
      ori = 90
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent ans_line9
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [-0.5, yaxis[3]]
      ori = 90
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent ansl_ine10
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [-0.5, yaxis[4]]
      ori = 90
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent pos1
      opacity [set every frame] = op1
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[0], yposi[0]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos2
      opacity [set every frame] = op2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[1], yposi[1]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos3
      opacity [set every frame] = op3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[2], yposi[2]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos4
      opacity [set every frame] = op4
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[3], yposi[3]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos5
      opacity [set every frame] = op5
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[4], yposi[4]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos6
      opacity [set every frame] = op6
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[5], yposi[5]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos7
      opacity [set every frame] = op7
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[6], yposi[6]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos8
      opacity [set every frame] = op8
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[7], yposi[7]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos9
      opacity [set every frame] = op9
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[8], yposi[8]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos10
      opacity [set every frame] = op10
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[9], yposi[9]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos11
      opacity [set every frame] = op11
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[10], yposi[10]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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    PolygonComponent pos12
      opacity [set every frame] = op12
      fillColor = $[1,1,1]
      stopVal [duration (s)] = $dur
      pos = [xposi[11], yposi[11]]
      startVal [time (s)] = 0.0
      size = [0.2, 0.2]
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  Routine trial
    CodeComponent code_3
      Begin Experiment:
        n = 1
        m = 0
        xaxis = np.linspace(-0.1, -0.9, 5)
        yaxis = np.linspace(-0.4, 0.4, 5)
        seq = np.arange(16)
        np.random.shuffle(seq)
        xposi = np.tile(xaxis[0:4]-0.1,4)[::-1]
        yposi = np.sort(np.tile(yaxis[0:4]+0.1,4))[::-1]
        #xp = 0
        #yp = 0
        correct = np.zeros(2)
        #indx = 0
        #indy = 0
        point = 0
        op1 = 0
        op2 = 0
        op3 = 0
        op4 = 0
        op5 = 0
        op6 = 0
        op7 = 0
        op8 = 0
        op9 = 0
        op10 = 0
        op11 = 0
        op12 = 0
        op13 = 0
        op14 = 0
        op15 = 0
        op16 = 0
        test = np.zeros(16)
        col = (['blue','white','red'])*5
        np.random.shuffle(col)
        dur = 3
      Begin Routine:
        np.random.shuffle(col)
      End Routine:
        m = m+1
    TextComponent text
      color [set every repeat] = black
      text = X
      stopVal [duration (s)] = 2.25
      pos [set every frame] = [xposi[seq[m]], yposi[seq[m]]]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    PolygonComponent tri_line1
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.25
      pos = [xaxis[0], 0]
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent tri_line2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.25
      pos = [xaxis[1], 0]
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent tri_line3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.25
      pos = [xaxis[2], 0]
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent tri_line4
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.25
      pos = [xaxis[3], 0]
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent tri_line5
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.25
      pos = [xaxis[4], 0]
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent tri_line6
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.25
      pos = [-0.5, yaxis[0]]
      ori = 90
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent tri_line7
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.25
      pos = [-0.5, yaxis[1]]
      ori = 90
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent tri_line8
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.25
      pos = [-0.5, yaxis[2]]
      ori = 90
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent tri_line9
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.25
      pos = [-0.5, yaxis[3]]
      ori = 90
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    PolygonComponent tri_line10
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.25
      pos = [-0.5, yaxis[4]]
      ori = 90
      startVal [time (s)] = 0.0
      size = [0.01, 0.8]
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    TextComponent blank
      stopVal [duration (s)] = 0.75
      startVal [time (s)] = 2.25
      letterHeight = 0.1
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  Routine fixation
    CodeComponent code_2
      End Routine:
        if any(correct) == 1:
            correct
        else:
            endExpNow = True
        n = n + 1
        correct = np.zeros(2)
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 12
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    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 2
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      LoopInitiator trials loopType="TrialHandler"
        loopType = random
        nReps = n
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        Routine trial
      LoopTerminator trials
      Routine answer
    LoopTerminator trials_2
    Routine fixation
  LoopTerminator trials_3
